CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:3
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|/media/18tbdrive/1.Github_Repositories/pccma_atlas_image_profiling/1.whole_image_qc/loaddata_csvs
    Name of the file:
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate
    Rescale intensities?:Yes

MeasureImageQuality:[module_num:2|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notes:['Measure and extract image quality metrics to then use for identifying poor quality images.', '', 'We only extract blur and saturation using default parameters.']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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:No
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:No
    Calculate thresholds?:No
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
ExportToSpreadsheet:[module_num:3|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notes:['Export image quality metrics per plate to a CSV for identifying threshold for whole image QC.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|PathName_OrigER,Image|PathName_OrigDNA,Image|PathName_OrigAGP,Image|PathName_OrigBrightfield,Image|PathName_OrigMito,Image|PathName_OrigRNA,Image|FileName_OrigAGP,Image|FileName_OrigDNA,Image|FileName_OrigER,Image|FileName_OrigBrightfield,Image|FileName_OrigMito,Image|FileName_OrigRNA,Image|Metadata_PositionY,Image|Metadata_Well,Image|Metadata_Reimaged,Image|Metadata_Col,Image|Metadata_Row,Image|Metadata_FieldID,Image|Metadata_Plate,Image|Metadata_PositionZ,Image|Metadata_AbsPositionZ,Image|Metadata_ChannelID,Image|Metadata_PositionX,Image|Metadata_PlaneID,Image|Metadata_Site,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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